PsychoPy2experiment version="2020.2.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = vm_20xx
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Routines
  Routine baseline
    PolygonComponent baseline_target
      fillColor = $[1,1,1]
      ori = 45
      pos [set every repeat] = (target_x, target_y)
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent baseline_fixation
      fillColor = $[1,0,0]
      lineColor = $[1,0,0]
      nVertices = 32
      opacity [set every repeat] = 1
      pos [set every repeat] = (0, 0)
      shape = regular polygon...
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
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    MouseComponent baseline_mouse
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      startVal [time (s)] = 0.0
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    CodeComponent baseline_code
      Code Type = Auto->JS
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      Begin Routine:
        baseline_fixation.opacity = 1
        baseline_fixation.pos = [0, 0]
        mouse_center = baseline_mouse.getPos()
      Each Frame:
        if baseline_mouse.getPressed()[0]:
            baseline_fixation.opacity = 0
            if euclidean_dist(baseline_mouse.getPos(), [0, 0]) > 0.44:
                baseline_fixation.pos = baseline_mouse.getPos()
                baseline_fixation.opacity = 1
                continueRoutine = False
        else:
            baseline_fixation.opacity = 1
            baseline_fixation.pos = [0, 0]
            mouse_center = baseline_mouse.getPos()
            baseline_mouse.setPos([0, 0])
      End Routine:
        baseline_fixation.opacity = 1
        baseline_fix_end_pos = baseline_fixation.pos
  Routine rotated
    PolygonComponent rotated_target
      fillColor = $[1,1,1]
      ori = 45
      pos [set every frame] = (target_x, target_y)
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent rotated_fixation
      fillColor = $[1,0,0]
      lineColor = $[1,0,0]
      nVertices = 32
      pos [set every frame] = (0, 0)
      shape = regular polygon...
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
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    MouseComponent rotated_mouse
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      startVal [time (s)] = 0.0
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    CodeComponent rotated_code
      Code Type = Auto->JS
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      Begin Experiment:
        def rotate(x, y, angle):
            radians = (pi/180)*angle
            cos_val = cos(radians)
            sin_val = sin(radians)
            nx = x*cos_val + y*sin_val
            ny = y*cos_val - x*sin_val
            return [nx, ny];
      Begin Routine:
        rotated_fixation.opacity = 1
        rotated_fixation.pos = [0, 0]
        mouse_center = rotated_mouse.getPos()
      Each Frame:
        if rotated_mouse.getPressed()[0]:
            rotated_fixation.opacity = 0
            if euclidean_dist(rotated_mouse.getPos(), [0, 0]) > 0.44:
                mouse_pos = rotated_mouse.getPos()
                rotated_fixation.pos = rotate(mouse_pos[0], mouse_pos[1], 90)
        #        rotated_fixation.pos = rotated_mouse.getPos()
                rotated_fixation.opacity = 1
                continueRoutine = False
        else:
            rotated_fixation.opacity = 1
            rotated_fixation.pos = [0, 0]
            mouse_center = rotated_mouse.getPos()
            rotated_mouse.setPos([0, 0])
      End Routine:
        rotated_fixation.opacity = 1
        rotated_fix_end_pos = rotated_fixation.pos
  Routine break_2
    TextComponent rotated_breaks
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Take a break.

        Whenever you're ready, tap the pad to continue
    MouseComponent mouse_5
      forceEndRoutineOnPress = any click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine transfer
    PolygonComponent transfer_target
      fillColor = $[1,1,1]
      ori = 45
      pos [set every repeat] = (target_x, target_y)
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent transfer_fixation
      fillColor = $[1,0,0]
      lineColor = $[1,0,0]
      nVertices = 32
      pos [set every repeat] = (0, 0)
      shape = regular polygon...
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
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    MouseComponent transfer_mouse
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      startVal [time (s)] = 0.0
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    CodeComponent transfer_code
      Code Type = Auto->JS
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      Begin Routine:
        transfer_fixation.opacity = 1
        transfer_fixation.pos = [0, 0]
        mouse_center = transfer_mouse.getPos()
      Each Frame:
        if transfer_mouse.getPressed()[0]:
            transfer_fixation.opacity = 0
            if euclidean_dist(transfer_mouse.getPos(), [0, 0]) > 0.44:
                transfer_fixation.pos = transfer_mouse.getPos()
                transfer_fixation.opacity = 1
                continueRoutine = False
        else:
            transfer_fixation.opacity = 1
            transfer_fixation.pos = [0, 0]
            mouse_center = transfer_mouse.getPos()
            transfer_mouse.setPos([0, 0])
      End Routine:
        transfer_fixation.opacity = 1
        transfer_fix_end_pos = transfer_fixation.pos
  Routine Done
    TextComponent done_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        You are all set!

        Thank you for participating.

        Please see the researcher.
    MouseComponent mouse_4
      forceEndRoutineOnPress = any click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine instructions
    TextComponent Welcome
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Welcome to Visuomotor Adaptation!

        Your task is to move a circle controlled by the pen to the target cross.

        The circle will disappear once you start to move and reappear as you cover the distance required to hit the target.

        Try to hit the target as many times as possible.

        Tap on the tab to proceed to a demo.
    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = never
      startVal [time (s)] = 2
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  Routine demo
    PolygonComponent demo_target
      fillColor = $[1,1,1]
      nVertices = 32
      ori = 45
      pos [set every repeat] = (target_x, target_y)
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent demo_fixation
      fillColor = $[1,0,0]
      lineColor = $[1,0,0]
      nVertices = 32
      pos [set every repeat] = (0, 0)
      shape = regular polygon...
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
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    MouseComponent demo_mouse
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        def euclidean_dist(vec1, vec2):
            return sqrt((vec1[0] - vec2[0])**2 + (vec1[1] - vec2[1])**2)
      Begin Routine:
        demo_fixation.opacity = 1
        demo_fixation.pos = [0, 0]
        mouse_center = demo_mouse.getPos()
        win.mouseVisible = False
      Each Frame:
        if demo_mouse.getPressed()[0]:
            demo_fixation.opacity = 0
            if euclidean_dist(demo_mouse.getPos(), [0, 0]) > 0.44:
                demo_fixation.pos = demo_mouse.getPos()
                demo_fixation.opacity = 1
                continueRoutine = False
        else:
            demo_fixation.opacity = 1
            demo_fixation.pos = [0, 0]
            mouse_center = demo_mouse.getPos()
            demo_mouse.setPos([0, 0])
      End Routine:
        demo_fixation.opacity = 1
        demo_fix_end_pos = demo_fixation.pos
  Routine break_0
    TextComponent text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Let's try four more trials.

        Tap the tablet to continue.
    MouseComponent mouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = never
      startVal [time (s)] = 0.5
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  Routine break_1
    TextComponent text_2
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Start next block.

        Tap on the tablet to continue.
    MouseComponent mouse_3
      forceEndRoutineOnPress = any click
      saveMouseState = never
      startVal [time (s)] = 0.25
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  Routine demo_feedback
    PolygonComponent demo_target_feedback
      fillColor = $[1,1,1]
      ori = 45
      pos [set every repeat] = (target_x, target_y)
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    PolygonComponent demo_fixation_feedback
      fillColor = $[1,0,0]
      lineColor = $[1,0,0]
      nVertices = 32
      pos [set every repeat] = demo_fix_end_pos
      shape = regular polygon...
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine baseline_feedback
    PolygonComponent baseline_target_feedback
      fillColor = $[1,1,1]
      ori = 45
      pos [set every repeat] = (target_x, target_y)
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    PolygonComponent baseline_fixation_feedback
      fillColor = $[1,0,0]
      lineColor = $[1,0,0]
      nVertices = 32
      pos [set every repeat] = baseline_fix_end_pos
      shape = regular polygon...
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine rotated_feedback
    PolygonComponent rotated_target_feedback
      fillColor = $[1,1,1]
      ori = 45
      pos [set every repeat] = (target_x, target_y)
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    PolygonComponent rotated_fixation_feedback
      fillColor = $[1,0,0]
      lineColor = $[1,0,0]
      nVertices = 32
      pos [set every repeat] = rotated_fix_end_pos
      shape = regular polygon...
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine transfer_feedback
    PolygonComponent transfer_target_feedback
      fillColor = $[1,1,1]
      ori = 45
      pos [set every repeat] = (target_x, target_y)
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    PolygonComponent transfer_fixation_feedback
      fillColor = $[1,0,0]
      lineColor = $[1,0,0]
      nVertices = 32
      pos [set every repeat] = transfer_fix_end_pos
      shape = regular polygon...
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine experiment_start
    TextComponent text_3
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Experiment starts now!

        Tap on the trackpad to continue
    MouseComponent mouse_6
      forceEndRoutineOnPress = any click
      saveMouseState = never
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = random
    nReps = 2
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    LoopInitiator demo_trials loopType="TrialHandler"
      conditionsFile = conditions_demo.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('target_x', 0.3), ('target_y', 0.3), ('rotation', 0)]),
        OrderedDict([('target_x', -0.3), ('target_y', 0.3), ('rotation', 0)]),
        OrderedDict([('target_x', -0.3), ('target_y', -0.3), ('rotation', 0)]),
        OrderedDict([('target_x', 0.3), ('target_y', -0.3), ('rotation', 0)])]
      Routine demo
      Routine demo_feedback
    LoopTerminator demo_trials
    Routine break_0
  LoopTerminator trials_2
  Routine experiment_start
  LoopInitiator baseline_trials loopType="TrialHandler"
    conditionsFile = conditions_baseline.xlsx
    loopType = random
    nReps = 4
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    conditions:
      [OrderedDict([('target_x', 0.3), ('target_y', 0.3), ('rotation', 0)]),
      OrderedDict([('target_x', -0.3), ('target_y', 0.3), ('rotation', 0)]),
      OrderedDict([('target_x', -0.3), ('target_y', -0.3), ('rotation', 0)]),
      OrderedDict([('target_x', 0.3), ('target_y', -0.3), ('rotation', 0)]),
      OrderedDict([('target_x', 0.3), ('target_y', 0.3), ('rotation', 0)]),
      OrderedDict([('target_x', -0.3), ('target_y', 0.3), ('rotation', 0)]),
      OrderedDict([('target_x', -0.3), ('target_y', -0.3), ('rotation', 0)]),
      OrderedDict([('target_x', 0.3), ('target_y', -0.3), ('rotation', 0)]),
      OrderedDict([('target_x', 0.3), ('target_y', 0.3), ('rotation', 0)]),
      OrderedDict([('target_x', -0.3), ('target_y', 0.3), ('rotation', 0)]),
      OrderedDict([('target_x', -0.3), ('target_y', -0.3), ('rotation', 0)]),
      OrderedDict([('target_x', 0.3), ('target_y', -0.3), ('rotation', 0)]),
      OrderedDict([('target_x', 0.3), ('target_y', 0.3), ('rotation', 0)]),
      OrderedDict([('target_x', -0.3), ('target_y', 0.3), ('rotation', 0)]),
      OrderedDict([('target_x', -0.3), ('target_y', -0.3), ('rotation', 0)]),
      OrderedDict([('target_x', 0.3), ('target_y', -0.3), ('rotation', 0)])]
    Routine baseline
    Routine baseline_feedback
  LoopTerminator baseline_trials
  Routine break_1
  LoopInitiator blocks loopType="TrialHandler"
    loopType = random
    nReps = 10
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    LoopInitiator block_trials loopType="TrialHandler"
      conditionsFile = conditions_baseline.xlsx
      loopType = random
      nReps = 4
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      conditions:
        [OrderedDict([('target_x', 0.3), ('target_y', 0.3), ('rotation', 0)]),
        OrderedDict([('target_x', -0.3), ('target_y', 0.3), ('rotation', 0)]),
        OrderedDict([('target_x', -0.3), ('target_y', -0.3), ('rotation', 0)]),
        OrderedDict([('target_x', 0.3), ('target_y', -0.3), ('rotation', 0)]),
        OrderedDict([('target_x', 0.3), ('target_y', 0.3), ('rotation', 0)]),
        OrderedDict([('target_x', -0.3), ('target_y', 0.3), ('rotation', 0)]),
        OrderedDict([('target_x', -0.3), ('target_y', -0.3), ('rotation', 0)]),
        OrderedDict([('target_x', 0.3), ('target_y', -0.3), ('rotation', 0)]),
        OrderedDict([('target_x', 0.3), ('target_y', 0.3), ('rotation', 0)]),
        OrderedDict([('target_x', -0.3), ('target_y', 0.3), ('rotation', 0)]),
        OrderedDict([('target_x', -0.3), ('target_y', -0.3), ('rotation', 0)]),
        OrderedDict([('target_x', 0.3), ('target_y', -0.3), ('rotation', 0)]),
        OrderedDict([('target_x', 0.3), ('target_y', 0.3), ('rotation', 0)]),
        OrderedDict([('target_x', -0.3), ('target_y', 0.3), ('rotation', 0)]),
        OrderedDict([('target_x', -0.3), ('target_y', -0.3), ('rotation', 0)]),
        OrderedDict([('target_x', 0.3), ('target_y', -0.3), ('rotation', 0)])]
      Routine rotated
      Routine rotated_feedback
    LoopTerminator block_trials
    Routine break_2
  LoopTerminator blocks
  LoopInitiator transfer_trials loopType="TrialHandler"
    conditionsFile = conditions_baseline.xlsx
    loopType = random
    nReps = 4
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    conditions:
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    Routine transfer
    Routine transfer_feedback
  LoopTerminator transfer_trials
  Routine Done
